begintemplate l4
public apcounter,apvec
public all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,soma,dend

proc celldef() {
  topol()
}

create soma, apic[39], dend[29]

proc topol() { local i
  connect apic(0), soma(1)
  for i = 1, 3 connect apic[i](0), apic[i-1](1)
  connect apic[4](0), apic[2](1)
  for i = 5, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  for i = 11, 12 connect apic[i](0), apic[10](1)
  connect apic[13](0), apic[7](1)
  for i = 14, 15 connect apic[i](0), apic[13](1)
  for i = 16, 17 connect apic[i](0), apic[15](1)
  connect apic[18](0), apic[6](1)
  for i = 19, 20 connect apic[i](0), apic[18](1)
  connect apic[21](0), apic[5](1)
  for i = 22, 23 connect apic[i](0), apic[21](1)
  for i = 24, 25 connect apic[i](0), apic[i-1](1)
  connect apic[26](0), apic[24](1)
  connect apic[27](0), apic[23](1)
  for i = 28, 29 connect apic[i](0), apic[27](1)
  connect apic[30](0), apic[4](1)
  connect apic[31](0), apic[1](1)
  for i = 32, 33 connect apic[i](0), apic[i-1](1)
  connect apic[34](0), apic[32](1)
  connect apic[35](0), apic[31](1)
  connect apic[36](0), apic(1)
  for i = 37, 38 connect apic[i](0), apic[36](1)
  for i = 0, 3 connect dend[i](0), soma(0)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  for i = 6, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  connect dend[9](0), dend[5](1)
  for i = 10, 11 connect dend[i](0), dend[i-1](1)
  connect dend[12](0), dend[10](1)
  connect dend[13](0), dend[9](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), soma(0)
  for i = 17, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), dend[17](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  connect dend[26](0), dend[16](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-0.341, 0.527, 0.23, 15.032)
	pt3dadd(4.67, 9.99, 2.27, 3.23)
  }
  apic {pt3dclear()
	pt3dadd(4.67, 9.99, 2.27, 3.23)
	pt3dadd(4.93, 11.81, 2.27, 3.23)
	pt3dadd(5.37, 14.99, 2.27, 3.23)
	pt3dadd(3.99, 18.42, 2.27, 3.23)
	pt3dadd(3.71, 18.81, 2.27, 3.23)
  }
  apic[1] {pt3dclear()
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  }
}
proc shape3d_2() {
  apic[14] {	pt3dadd(56.23, 169.8, -1.97, 1.39)
	pt3dadd(62.47, 177.72, -6.29, 1.39)
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  }
}
proc shape3d_3() {
  apic[29] {	pt3dadd(-24.72, 138.57, -16.29, 1.39)
	pt3dadd(-30.43, 147.7, -16.74, 1.39)
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  }
}
proc shape3d_4() {
  dend[3] {	pt3dadd(-9.63, -16.36, -12.65, 2.31)
  }
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  }
}
proc shape3d_5() {
  dend[23] {	pt3dadd(-43.2, 0.4, -8.33, 1.39)
	pt3dadd(-49.34, -0.13, -8.33, 1.39)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
}
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,apcounter,apvec,nil

proc init(){
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn ,ccnetcon,tcnetcon,apcounter,apvec ,nil

	all=new SectionList()
	dends = new SectionList()
	tcdends = new SectionList()
	ccdends = new SectionList()
	ccsyn=new List()
	tcsyn=new List()
	ccnetcon=new List()
	tcnetcon=new List()
	celldef()
	access soma
	distance()
	forall{
		if (distance(0)>0){tcdends.append()}
		ccdends.append()
		dends.append()
		all.append()
		for i=0,n3d()-1{
			pt3dchange(i,x3d(i)+$1,y3d(i)+$2,z3d(i),diam3d(i))	
		}
		
		nseg=3
		insert pas
		e_pas=-60
		g_pas=1/30000//1/16000
		cm=1.5
		Ra=70
	}
	soma dends.remove()

	forsec dends{diam=diam/1.2}
	objref apcounter,apvec,nil
	apvec=new Vector()
	access soma
	apcounter=new NetCon(&v(.5), nil)
	apcounter.threshold = -20 
	apcounter.record(apvec)
}

endtemplate l4
