begintemplate l5
public apcounter,apvec
public all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,soma,dend

proc celldef() {
  topol()
}

create soma, dend[15], apic[29]

proc topol() { local i
  connect dend(0), soma(1)
  connect dend[1](0), soma(0)
  for i = 2, 3 connect dend[i](0), dend[1](1)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  connect dend[6](0), soma(0)
  for i = 7, 8 connect dend[i](0), dend[6](1)
  connect dend[9](0), soma(0)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), soma(0)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  connect apic(0), soma(0)
  for i = 1, 3 connect apic[i](0), apic[i-1](1)
  connect apic[4](0), apic[2](1)
  for i = 5, 6 connect apic[i](0), apic[4](1)
  connect apic[7](0), apic[1](1)
  for i = 8, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  for i = 11, 12 connect apic[i](0), apic[10](1)
  for i = 13, 14 connect apic[i](0), apic[i-1](1)
  connect apic[15](0), apic[13](1)
  connect apic[16](0), apic[12](1)
  for i = 17, 18 connect apic[i](0), apic[16](1)
  for i = 19, 20 connect apic[i](0), apic[18](1)
  for i = 21, 22 connect apic[i](0), apic[20](1)
  for i = 23, 24 connect apic[i](0), apic[22](1)
  connect apic[25](0), apic[7](1)
  connect apic[26](0), apic(1)
  for i = 27, 28 connect apic[i](0), apic[26](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-0.3375, -3.8625, 11.0725, 13.3853)
	pt3dadd(7.1, 0.36, 21.06, 2.19)
  }
  dend {pt3dclear()
	pt3dadd(7.1, 0.36, 21.06, 2.19)
	pt3dadd(9.88, 0.37, 21.06, 2.19)
	pt3dadd(15.29, 2.84, 21.06, 2.19)
	pt3dadd(19.99, 3.63, 21.06, 2.19)
	pt3dadd(26.23, 3.37, 20.71, 1.83)
	pt3dadd(30.02, 2.95, 20.71, 1.83)
	pt3dadd(34.43, 3.06, 20.71, 1.83)
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  }
}
proc shape3d_2() {
  apic[7] {	pt3dadd(-51.95, 30.55, 29.41, 1.46)
	pt3dadd(-54.88, 32.99, 29.41, 1.46)
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  }
}
proc shape3d_3() {
  apic[26] {	pt3dadd(-24.46, 19.18, -3.39, 1.1)
	pt3dadd(-25.09, 21.43, -3.39, 1.1)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
}
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,apcounter,apvec,nil

proc init(){
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn ,ccnetcon,tcnetcon,apcounter,apvec ,nil

	all=new SectionList()
	dends = new SectionList()
	tcdends = new SectionList()
	ccdends = new SectionList()
	ccsyn=new List()
	tcsyn=new List()
	ccnetcon=new List()
	tcnetcon=new List()
	celldef()
	access soma
	distance()
	forall{
		if (distance(0)>0){tcdends.append()}
		ccdends.append()
		dends.append()
		all.append()
		for i=0,n3d()-1{
			pt3dchange(i,x3d(i)+$1,y3d(i)+$2,z3d(i),diam3d(i))	
		}
		
		nseg=3
		insert pas
		e_pas=-60
		g_pas=1/30000//1/16000
		cm=1.5
		Ra=70
	}
	soma dends.remove()

	forsec dends{diam=diam/1.2}
	objref apcounter,apvec,nil
	apvec=new Vector()
	access soma
	apcounter=new NetCon(&v(.5), nil)
	apcounter.threshold = -20 
	apcounter.record(apvec)
}

endtemplate l5
