begintemplate l5
public apcounter,apvec
public all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,soma,dend

proc celldef() {
  topol()
}

create soma, dend[90]

proc topol() { local i
  connect dend(0), soma(1)
  for i = 1, 2 connect dend[i](0), dend(1)
  for i = 3, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[2](1)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  connect dend[8](0), soma(0)
  for i = 9, 11 connect dend[i](0), dend[i-1](1)
  connect dend[12](0), dend[10](1)
  connect dend[13](0), dend[9](1)
  for i = 14, 15 connect dend[i](0), dend[i-1](1)
  connect dend[16](0), dend[14](1)
  connect dend[17](0), dend[13](1)
  for i = 18, 19 connect dend[i](0), dend[17](1)
  for i = 20, 21 connect dend[i](0), dend[i-1](1)
  connect dend[22](0), dend[20](1)
  connect dend[23](0), dend[19](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  for i = 26, 27 connect dend[i](0), dend[25](1)
  for i = 28, 29 connect dend[i](0), dend[i-1](1)
  connect dend[30](0), dend[28](1)
  for i = 31, 32 connect dend[i](0), dend[i-1](1)
  connect dend[33](0), dend[31](1)
  connect dend[34](0), dend[30](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  connect dend[37](0), dend[27](1)
  for i = 38, 39 connect dend[i](0), dend[37](1)
  for i = 40, 42 connect dend[i](0), dend[i-1](1)
  connect dend[43](0), dend[41](1)
  for i = 44, 45 connect dend[i](0), dend[43](1)
  connect dend[46](0), dend[40](1)
  connect dend[47](0), dend[39](1)
  for i = 48, 49 connect dend[i](0), dend[47](1)
  connect dend[50](0), dend[8](1)
  for i = 51, 52 connect dend[i](0), dend[50](1)
  connect dend[53](0), soma(0)
  for i = 54, 57 connect dend[i](0), dend[i-1](1)
  connect dend[58](0), dend[56](1)
  connect dend[59](0), dend[55](1)
  for i = 60, 61 connect dend[i](0), dend[59](1)
  connect dend[62](0), dend[54](1)
  for i = 63, 64 connect dend[i](0), dend[62](1)
  connect dend[65](0), dend[53](1)
  for i = 66, 67 connect dend[i](0), dend[65](1)
  connect dend[68](0), soma(0)
  for i = 69, 71 connect dend[i](0), dend[i-1](1)
  connect dend[72](0), dend[70](1)
  connect dend[73](0), dend[69](1)
  for i = 74, 75 connect dend[i](0), dend[73](1)
  connect dend[76](0), dend[68](1)
  for i = 77, 78 connect dend[i](0), dend[i-1](1)
  connect dend[79](0), dend[77](1)
  connect dend[80](0), dend[76](1)
  for i = 81, 82 connect dend[i](0), dend[80](1)
  connect dend[83](0), soma(0)
  for i = 84, 86 connect dend[i](0), dend[i-1](1)
  connect dend[87](0), dend[84](1)
  connect dend[88](0), dend[83](1)
  connect dend[89](0), dend[88](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-5.74, 304.223, -29.6352, 14.9257)
	pt3dadd(-7.21, 304.01, -37.43, 2.4)
  }
  dend {pt3dclear()
	pt3dadd(-7.21, 304.01, -37.43, 2.4)
	pt3dadd(-12.01, 303.1, -38.23, 2.4)
	pt3dadd(-15.2, 302.94, -39.3, 2.4)
  }
  dend[1] {pt3dclear()
	pt3dadd(-15.2, 302.94, -39.3, 2.4)
	pt3dadd(-18.75, 308.11, -37.08, 1.2)
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  }
}
proc shape3d_2() {
  dend[16] {	pt3dadd(-21.99, 358.03, -58.16, 1.64)
	pt3dadd(-21.56, 357.99, -62.55, 1.64)
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  }
}
proc shape3d_3() {
  dend[34] {	pt3dadd(45.31, 531.73, -112.62, 1.42)
  }
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  }
}
proc shape3d_4() {
  dend[51] {	pt3dadd(-15.61, 353.94, 0.4, 1.64)
	pt3dadd(-14.07, 356.56, 0.87, 1.64)
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  }
}
proc shape3d_5() {
  dend[66] {	pt3dadd(72.69, 286.65, -25.85, 1.2)
	pt3dadd(75.69, 285.84, -25.45, 1.2)
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  }
}
proc shape3d_6() {
  dend[86] {	pt3dadd(-18.55, 240.25, -32.36, 0.98)
	pt3dadd(-20.69, 238.34, -32.33, 0.98)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
}
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,apcounter,apvec,nil

proc init(){
	objref all,dends,tcdends,ccdends,ccsyn,tcsyn ,ccnetcon,tcnetcon,apcounter,apvec ,nil

	all=new SectionList()
	dends = new SectionList()
	tcdends = new SectionList()
	ccdends = new SectionList()
	ccsyn=new List()
	tcsyn=new List()
	ccnetcon=new List()
	tcnetcon=new List()
	celldef()
	access soma
	distance()
	forall{
		if (distance(0)>0){tcdends.append()}
		ccdends.append()
		dends.append()
		all.append()
		for i=0,n3d()-1{
			pt3dchange(i,x3d(i)+$1,y3d(i)+$2,z3d(i),diam3d(i))	
		}
		
		nseg=1
		insert pas
		e_pas=-60
		g_pas=1/30000//1/16000
		cm=1.5
		Ra=70
	}
	soma dends.remove()

	forsec dends{diam=diam/1.2}
	objref apcounter,apvec,nil
	apvec=new Vector()
	access soma
	apcounter=new NetCon(&v(.5), nil)
	apcounter.threshold = -20 
	apcounter.record(apvec)
}

endtemplate l5

